PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AdyaSingh_SoloProject_AU2220002
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image
      image = C:/Users/DELL/Downloads/coffee mug.jpeg
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Coffee mug
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    ImageComponent image_2
      image = C:/Users/DELL/Downloads/Smart phone.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = Smartphone
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    ImageComponent image_3
      image = C:/Users/DELL/Downloads/Sunglasses.png
      pos = (0.2, 0)
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_3
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = Sunglasses
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    ImageComponent image_4
      image = C:/Users/DELL/Downloads/Backpack.jpeg
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_4
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = Backpack
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    ImageComponent image_5
      image = C:/Users/DELL/Downloads/Keys.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = Keys
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  Routine Trial_2
    PolygonComponent Fixation_2
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_6
      image = C:/Users/DELL/Downloads/mirror.jpeg
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Mirror
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    ImageComponent image_7
      image = C:/Users/DELL/Downloads/car.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = car
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    ImageComponent image_8
      image = C:/Users/DELL/Downloads/bicycle.jpeg
      pos = (0, -0.1)
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = Bicycle
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    ImageComponent image_9
      image = C:/Users/DELL/Downloads/book.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = Book
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    ImageComponent image_10
      image = C:/Users/DELL/Downloads/fork.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = Fork
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  Routine Trial_3
    PolygonComponent Fixation_3
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_11
      image = C:/Users/DELL/Downloads/toothbrush.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = toothbrush
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    ImageComponent image_12
      image = C:/Users/DELL/Downloads/towel.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = towel
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    ImageComponent image_13
      image = C:/Users/DELL/Downloads/fridge.jpeg
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = refrigerator
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    ImageComponent image_14
      image = C:/Users/DELL/Downloads/tv.png
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = television
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    ImageComponent image_15
      image = C:/Users/DELL/Downloads/clock.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = clock
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  Routine test_2
    PolygonComponent fixation_2
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent test_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $WORDS
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'o','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Test
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent test3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'o','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine test
  Routine test_4
  Routine T3
    PolygonComponent fixation_3
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent test_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $words
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'o','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SoloTestwords.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'coffee Mug', 'corr_resp': 'old'},
      {'word': 'Smartphone', 'corr_resp': 'old'},
      {'word': 'Sunglasses', 'corr_resp': 'old'},
      {'word': 'Backpack', 'corr_resp': 'old'},
      {'word': 'Keys', 'corr_resp': 'old'},
      {'word': 'Wallet', 'corr_resp': 'new'},
      {'word': 'Headphones', 'corr_resp': 'new'},
      {'word': 'Watch', 'corr_resp': 'new'},
      {'word': 'Umbrella', 'corr_resp': 'new'},
      {'word': 'Pen', 'corr_resp': 'new'}]
    Routine Test
  LoopTerminator trials
  Routine Trial_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = SoloprojectTestwords2.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'WORDS': 'Mirror', 'Corr_Resp': 'o'},
      {'WORDS': 'Car', 'Corr_Resp': 'o'},
      {'WORDS': 'Bicycle', 'Corr_Resp': 'o'},
      {'WORDS': 'book', 'Corr_Resp': 'o'},
      {'WORDS': 'Fork', 'Corr_Resp': 'o'},
      {'WORDS': 'Plate', 'Corr_Resp': 'n'},
      {'WORDS': 'Refrigerator', 'Corr_Resp': 'n'},
      {'WORDS': 'Oven', 'Corr_Resp': 'n'},
      {'WORDS': 'Plant', 'Corr_Resp': 'n'},
      {'WORDS': 'spoon', 'Corr_Resp': 'n'}]
    Routine test_2
  LoopTerminator trials_2
  Routine Trial_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = SPtestwords3.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'words': 'Toothbrush', 'cor_resp': 'o'},
      {'words': 'Towel', 'cor_resp': 'o'},
      {'words': 'Refrigerator', 'cor_resp': 'o'},
      {'words': 'Television', 'cor_resp': 'o'},
      {'words': 'Clock', 'cor_resp': 'o'},
      {'words': 'Comb', 'cor_resp': 'n'},
      {'words': 'bottle', 'cor_resp': 'n'},
      {'words': 'lipstick', 'cor_resp': 'n'},
      {'words': 'camera', 'cor_resp': 'n'},
      {'words': 'orange', 'cor_resp': 'n'}]
    Routine T3
  LoopTerminator trials_3
