PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo project Test group 1
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image
      image = C:/Users/DELL/Downloads/coffee mug.jpeg
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Coffee mug
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    ImageComponent image_2
      image = C:/Users/DELL/Downloads/Smart phone.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = Smartphone
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    ImageComponent image_3
      image = C:/Users/DELL/Downloads/Sunglasses.png
      pos = (0.2, 0)
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_3
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = Sunglasses
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    ImageComponent image_4
      image = C:/Users/DELL/Downloads/Backpack.jpeg
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_4
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = Backpack
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    ImageComponent image_5
      image = C:/Users/DELL/Downloads/Keys.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = Keys
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  Routine Trial_2
    PolygonComponent Fixation_2
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_6
      image = C:/Users/DELL/Downloads/coffee mug.jpeg
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Coffee mug
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    ImageComponent image_7
      image = C:/Users/DELL/Downloads/Smart phone.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = Smartphone
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    ImageComponent image_8
      image = C:/Users/DELL/Downloads/Sunglasses.png
      pos = (0, -0.1)
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = Sunglasses
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    ImageComponent image_9
      image = C:/Users/DELL/Downloads/Backpack.jpeg
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = Backpack
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    ImageComponent image_10
      image = C:/Users/DELL/Downloads/Keys.png
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = Keys
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  Routine Trial_3
    PolygonComponent Fixation_3
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    ImageComponent image_11
      image = C:/Users/DELL/Downloads/coffee mug.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text = Coffee mug
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    ImageComponent image_12
      image = C:/Users/DELL/Downloads/Smart phone.png
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = Smartphone
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    ImageComponent image_13
      image = C:/Users/DELL/Downloads/Sunglasses.png
      size = (0.3, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 3
      text = Sunglasses
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    ImageComponent image_14
      image = C:/Users/DELL/Downloads/Backpack.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 3
      text = Backpack
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    ImageComponent image_15
      image = C:/Users/DELL/Downloads/Keys.png
      pos = (0.2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
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    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 12.5
      stopVal [duration (s)] = 3
      text = Keys
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  Routine Test
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent test
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'o','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine test_2
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SoloTestwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'coffee Mug', 'corr_resp': 'old'},
      {'word': 'Smartphone', 'corr_resp': 'old'},
      {'word': 'Sunglasses', 'corr_resp': 'old'},
      {'word': 'Backpack', 'corr_resp': 'old'},
      {'word': 'Keys', 'corr_resp': 'old'},
      {'word': 'Wallet', 'corr_resp': 'new'},
      {'word': 'Headphones', 'corr_resp': 'new'},
      {'word': 'Watch', 'corr_resp': 'new'},
      {'word': 'Umbrella', 'corr_resp': 'new'},
      {'word': 'Pen', 'corr_resp': 'new'}]
    Routine Test
  LoopTerminator trials
