PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delayed distribution (tutorial6)
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"  
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/delay distribution factors.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 762, 'delay': 184},
      {'reward_today': 15, 'future_reward': 315, 'delay': 693},
      {'reward_today': 27, 'future_reward': 598, 'delay': 428},
      {'reward_today': 40, 'future_reward': 124, 'delay': 571},
      {'reward_today': 49, 'future_reward': 893, 'delay': 237},
      {'reward_today': 67, 'future_reward': 431, 'delay': 864},
      {'reward_today': 78, 'future_reward': 667, 'delay': 319},
      {'reward_today': 34, 'future_reward': 215, 'delay': 506},
      {'reward_today': 45, 'future_reward': 579, 'delay': 752},
      {'reward_today': 67, 'future_reward': 842, 'delay': 298},
      {'reward_today': 32, 'future_reward': 196, 'delay': 627},
      {'reward_today': 21, 'future_reward': 753, 'delay': 915},
      {'reward_today': 23, 'future_reward': 488, 'delay': 461},
      {'reward_today': 45, 'future_reward': 926, 'delay': 784},
      {'reward_today': 67, 'future_reward': 357, 'delay': 513},
      {'reward_today': 89, 'future_reward': 610, 'delay': 359},
      {'reward_today': 76, 'future_reward': 284, 'delay': 607},
      {'reward_today': 75, 'future_reward': 719, 'delay': 274},
      {'reward_today': 43, 'future_reward': 152, 'delay': 842},
      {'reward_today': 45, 'future_reward': 880, 'delay': 195},
      {'reward_today': 67, 'future_reward': 426, 'delay': 679},
      {'reward_today': 56, 'future_reward': 672, 'delay': 126},
      {'reward_today': 6, 'future_reward': 319, 'delay': 837},
      {'reward_today': 67, 'future_reward': 541, 'delay': 508},
      {'reward_today': 78, 'future_reward': 197, 'delay': 354},
      {'reward_today': 65, 'future_reward': 832, 'delay': 710}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
    Routine trial
  LoopTerminator trials
